PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = short term memory
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine WelcomeScreen
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    TextComponent textWelcome
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Short Term Memory Experiment.

        Press the space bar to continue
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
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    TextComponent textInstructions
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        A series of words will appear, each word lasting for a short viewing time.
        Try to remember each word that is presented to you.

        Press space to continue
    KeyboardComponent keyInstructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine StudyTrials
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    TextComponent textStudyTrials
      color [set every repeat] = $WordColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $WordItem
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  Routine BlankScreen
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    TextComponent textBlank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine WaitScreen
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    TextComponent textWaitScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Pleas notify researcher.
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    KeyboardComponent keyWaitScreen
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank_screen
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    TextComponent textblank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine y_n_screen
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    TextComponent text_y_n_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Following words are testing your recall. Press either 'Y'  for yes, 'N' for no.
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    KeyboardComponent key_y_n
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestTrials
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    TextComponent textTestTrials
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $WordItem
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BlankScreen_2
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    TextComponent text_blankscreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine EndScreen
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Thank you for your participation in this study.
Flow
  Routine WelcomeScreen
  Routine BlankScreen
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:6
    conditionsFile = C:/Users/nazzu/Desktop/data/shorttermmemory_exp.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'WordItem': 'anxiety', 'WordColor': 'blue'},
      {'WordItem': 'depression', 'WordColor': 'blue'},
      {'WordItem': 'vexed', 'WordColor': 'blue'},
      {'WordItem': 'excited', 'WordColor': 'yellow'},
      {'WordItem': 'joyous', 'WordColor': 'yellow'},
      {'WordItem': 'content', 'WordColor': 'yellow'},
      {'WordItem': 'jealous', 'WordColor': None},
      {'WordItem': 'fascinated', 'WordColor': None},
      {'WordItem': 'ashamed', 'WordColor': None},
      {'WordItem': 'aggravated', 'WordColor': None},
      {'WordItem': 'calm', 'WordColor': None},
      {'WordItem': 'delighted', 'WordColor': None}]
    Routine StudyTrials
    Routine BlankScreen
  LoopTerminator trials
  Routine WaitScreen
  Routine blank_screen
  Routine y_n_screen
  Routine BlankScreen_2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/nazzu/Desktop/data/shorttermmemory_exp.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'WordItem': 'anxiety', 'WordColor': 'blue'},
      {'WordItem': 'depression', 'WordColor': 'blue'},
      {'WordItem': 'vexed', 'WordColor': 'blue'},
      {'WordItem': 'excited', 'WordColor': 'yellow'},
      {'WordItem': 'joyous', 'WordColor': 'yellow'},
      {'WordItem': 'content', 'WordColor': 'yellow'},
      {'WordItem': 'jealous', 'WordColor': None},
      {'WordItem': 'fascinated', 'WordColor': None},
      {'WordItem': 'ashamed', 'WordColor': None},
      {'WordItem': 'aggravated', 'WordColor': None},
      {'WordItem': 'calm', 'WordColor': None},
      {'WordItem': 'delighted', 'WordColor': None}]
    Routine TestTrials
    Routine BlankScreen
  LoopTerminator trials_2
  Routine EndScreen
