PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = WORD_PRIMING_DISHA
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $Study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Downloads/Study_Word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Study_word': 'book'},
      {'Study_word': 'cushion'},
      {'Study_word': 'phone'},
      {'Study_word': 'marble'},
      {'Study_word': 'board'},
      {'Study_word': 'Laptop'},
      {'Study_word': 'chart'},
      {'Study_word': 'T-shirt'},
      {'Study_word': 'mouse'},
      {'Study_word': 'Pastry'},
      {'Study_word': 'Case'},
      {'Study_word': 'Cruise'},
      {'Study_word': 'Police'},
      {'Study_word': 'Keys'},
      {'Study_word': 'Poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Desktop/New folder/Lab in Psychology/word priming .csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('test_word', 'I_pt_p'), ('Reference', 'laptop'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ha_t'), ('Reference', 'chart'), ('old_new', 'old')]),
      OrderedDict([('test_word', 't_hi_t'), ('Reference', 'tshirt'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ou_se'), ('Reference', 'mouse'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'p_as_tr_'), ('Reference', 'pastry'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'c_s_'), ('Reference', 'case'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ru_is_'), ('Reference', 'cruise'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'p_li_e'), ('Reference', 'police'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'k_y_'), ('Reference', 'keys'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'p_st_r'), ('Reference', 'poster'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_o_rd'), ('Reference', 'board'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_a_bl_'), ('Reference', 'marble'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ha_e'), ('Reference', 'phone'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_00_'), ('Reference', 'book'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'c_s_io_'), ('Reference', 'cushion'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'ta_l_'), ('Reference', 'table'), ('old_new', 'new')]),
      OrderedDict([('test_word', 'p_nc_l'), ('Reference', 'pencil'), ('old_new', 'new')]),
      OrderedDict([('test_word', 'v_s_'), ('Reference', 'vase'), ('old_new', 'new')])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
    Routine test
  LoopTerminator trials_2
